<?xml version='1.0' encoding='UTF-8'?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment"
  version="1">

<!--  
Training procedure for acoustic stimuli 'a3testacstimuli':
          Description: 
Template to generate a training procedure in APEX 3, diotic presentation. Run the MATLAB script a3testacstimuli.m specifying as input parameter the path where the audio files are

    % Programmed by APEX3 team, 
    % Adapted by Alejandro Osses V., HTI, TU/e, the Netherlands, 2015
    % Created on    : 2013-2014
    % Last update on: 11/06/2015 % Update this date manually
    % Last use on   : 11/06/2015 % Update this date manually
  -->

<!-- %%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%%% -->
    
  <procedure xsi:type="apex:trainingProcedureType">
    <parameters>
      <presentations>100</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>
    
    <trials>
      $$trials$$
    </trials>
  </procedure>
  
  
    <corrector xsi:type="apex:isequal"/>
    
    <screens>
<screen id="screen" >
<gridLayout width="1" height="2" rowstretch="1,10">
    <gridLayout width="2" height="1" x="1" y="1">
      <label id="aclabel" x="1" y="1">
        <text>Ac (dB)</text>
      </label>
      <spinBox id="acspin" x="2" y="1">
        <value>0</value>
        <min>-50</min>
        <max>20</max>
        <step>5</step>
        <parameter>gainLR</parameter>
      </spinBox>
      
       
    </gridLayout>
        $$buttonlayout$$

    </gridLayout>

        $$buttongroup$$

    </screen>
    </screens>
    
  
 <datablocks>
   <uri_prefix>.</uri_prefix>
 $$datablocks$$
   
</datablocks>

  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <driver>portaudio</driver>
      <card>default</card>
      <channels>2</channels>
      <gain channel="0">0</gain>
      <gain channel="1">0</gain>
      <samplerate>44100</samplerate>
      <!-- <buffersize>4096</buffersize> -->
    </device>
  </devices>
  
  
    <filters>
      <filter xsi:type="apex:amplifier" id="ampOverallGain">
        <device>wavdevice</device>
        <channels>1</channels>
        <gain channel="0" id="gainLR">0.0</gain>
      </filter>
      <filter xsi:type="apex:amplifier" id="ampMain">
        <device>wavdevice</device>
        <channels>2</channels>
        <gain channel="0" id="gain0">0.0</gain>
        <gain channel="1" id="gain1">0.0</gain>
      </filter>
    </filters>
  
  <stimuli>
      <fixed_parameters/>
   $$stimuli$$
   $$calstimulus$$
  </stimuli>
  
    <connections>
      <connection>
        <from>
          <id>_ALL_</id>
          <channel>0</channel>
        </from>
        <to>
          <id>ampOverallGain</id>
          <channel>0</channel>
        </to>
      </connection>
      <connection>
        <from>
          <id>ampOverallGain</id>
          <channel>0</channel>
        </from>
        <to>
          <id>ampMain</id>
          <channel>0</channel>
        </to>
      </connection>
      <connection>
        <from>
          <id>ampOverallGain</id>
          <channel>0</channel>
        </from>
        <to>
          <id>ampMain</id>
          <channel>1</channel>
        </to>
      </connection>

      <connection>
        <from>
          <id>ampMain</id>
          <channel>0</channel>
        </from>
        <to> 
          <id>wavdevice</id>
          <channel>0</channel>
        </to> 
      </connection>
      <connection>
        <from>
          <id>ampMain</id>
          <channel>1</channel>
        </from>
        <to> 
          <id>wavdevice</id>
          <channel>1</channel>
        </to> 
      </connection>
    </connections>  
    
    <calibration profile="HTI-HD265">
      <stimuli>
        <stimulus id="calstimulus"/>
      </stimuli>
      <parameters>
        <parameter id="gain0">
          <targetamplitude>65</targetamplitude>
          <calibrationamplitude>65</calibrationamplitude>
          <mute>-150.0</mute>
          <max>50</max>
        </parameter>
        <parameter id="gain1">
          <targetamplitude>65</targetamplitude>
          <calibrationamplitude>65</calibrationamplitude>
          <mute>-150.0</mute>
          <max>50</max>
        </parameter>
      </parameters>
    </calibration>
    
</apex:apex>
